PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001', 'counterbalance': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = simon_task
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Routines
  Routine simon_trial
    TextComponent fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent left_stim
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $left_stim_text
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    TextComponent right_stim
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $right_stim_text
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    TextComponent ITI
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent resp
      allowedKeys = 'z','m'
      correctAns = $ans
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
      storeCorrect = True
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  Routine simon_setup
    CodeComponent simon_config
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['counterbalance'] == '0':
            bindings = {'X': 'm', 'O': 'z'}
            if thisTrial['condition'] == 'incongruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'm'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'z'
            elif thisTrial['condition'] == 'congruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'm'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans='z'
        elif expInfo['counterbalance'] == '1':
            bindings = {'O': 'm', 'X': 'z'}
            if thisTrial['condition'] == 'incongruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'z'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'm'
            elif thisTrial['condition'] == 'congruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'z'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'm'
  Routine Prime
    ImageComponent image
      image = C:\Users\Devangshu Nandi\Documents\IITGN\Semester 2\Brain Imaging\Assignment_3\Images\Sad
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Prime_2
    ImageComponent image_2
      image = C:\Users\Devangshu Nandi\Documents\IITGN\Semester 2\Brain Imaging\Assignment_3\Images\Sad_1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Prime_3
    ImageComponent image_3
      image = C:\Users\Devangshu Nandi\Documents\IITGN\Semester 2\Brain Imaging\Assignment_3\Images\Sad_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Prime_4
    ImageComponent image_4
      image = C:\Users\Devangshu Nandi\Documents\IITGN\Semester 2\Brain Imaging\Assignment_3\Images\Sad_3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Welcome_Screen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = Please sit back and relax as some images will now be displayed as part of the experiment.
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  Routine Instructions
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = The experiment will now begin. Please press 'Z' when you see 'O' and 'M' when you see 'X'
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Flow
  Routine Welcome_Screen
  Routine Prime
  Routine Prime_2
  Routine Prime_3
  Routine Prime_4
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = simon_task_order.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('condition', 'incongruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'incongruent'), ('stim', 'O')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'O')])]
    Routine simon_setup
    Routine simon_trial
  LoopTerminator trials
